/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel
/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel
/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel PenelopeModel
/gate/physics/addProcess PositronAnnihilation
#/gate/physics/processes/PositronAnnihilation/setModel e+
/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e+
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-
/gate/physics/addProcess eMultipleScattering
#/gate/physics/processes/eMultipleScattering/setModel 
#/gate/physics/processes/MultipleScattering/setModel e+
#/gate/physics/processes/MultipleScattering/setModel e-
/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-
/gate/physics/processList Enabled
/gate/physics/processList Initialized
